<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:p3="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="TemplatePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>sessionTemplate.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LineMappings.Count</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MappingCount</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LineMappings</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MappingCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Name</rx:KeySelector>
              <rx:ElementSelector>Line</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LineMappings</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DelphiController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:SynchronizeTimestamp" />
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Device">
                <harp:OperationMode>Standby</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>false</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM12</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:LineCommand">
              <rx:Name>LineCommands</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LineActivation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LineMappings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.LineName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>OdorA</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Pow(2, it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Open</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.State</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p3:LineCommandState">
                            <Value>Open</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="OutputSet" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateOutputSetPayload">
                      <p2:OutputSet>Out7</p2:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Close</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.State</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p3:LineCommandState">
                            <Value>Close</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="OutputClear" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateOutputClearPayload">
                      <p2:OutputClear>Out7</p2:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:AuxInState" />
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:AuxiliaryInputs">
                <Value>Aux0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOnset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOnset</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOffset</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23492582</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p2:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="p2:PwmRiseEvent" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraStream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmStopPayload">
          <p2:PwmStop>Pwm0</p2:PwmStop>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmAndStimDisablePayload">
          <p2:PwmAndStimDisable>Pwm0ToOut1</p2:PwmAndStimDisable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ResetCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraProperties.ImagingRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ConfigurePwm">
          <p2:PwmChannels>Pwm0</p2:PwmChannels>
          <p2:Frequency>100</p2:Frequency>
          <p2:DutyCycle>50</p2:DutyCycle>
          <p2:PulseCount>0</p2:PulseCount>
          <p2:TriggerSource>Software</p2:TriggerSource>
          <p2:EventConfig>Enabled</p2:EventConfig>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmAndStimEnablePayload">
          <p2:PwmAndStimEnable>Pwm0ToOut1</p2:PwmAndStimEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmStartPayload">
          <p2:PwmStart>Pwm0</p2:PwmStart>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraStream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>100</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraBuffers</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PokeOnset</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ExtractTriggeredBuffer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraBuffers</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>50</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Buffer</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Buffer</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>test.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT0.1S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Timer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Timer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:BufferCount">
            <rx:Count>10</rx:Count>
            <rx:Skip>1</rx:Skip>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>HistoryBuffers</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>PokeOnset</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Timer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>ExtractBuffer</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>HistoryBuffers</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>5</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeLast">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>