<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:HardwareSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:RuleSchema;assembly=Extensions"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:p5="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HardwareSettings" />
        <Property Name="RuleSettings" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="HardwareSettings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>schemas\hardware-schema.yml</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromYaml">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:HardwareSchema" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RuleSettings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:RuleSelector">
                <p2:Path>schemas\rule-2.yml</p2:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromYaml">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:RuleSchema" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DelphiController</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,p3:StateDefinition)">
              <rx:Name>StateDictionary</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,p3:StateDefinition)">
              <rx:Name>TransitionState</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GenerateStateDictionary</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Rule.StateDefinitions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Rule.StateDefinitions.Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ToDictionary">
                    <rx:KeySelector>Name</rx:KeySelector>
                    <rx:ElementSelector>it</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TransitionState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DelphiController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>DelphiCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="ControllerSettings" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ComPort</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="GroupWorkflow">
              <Name>DisableFSM</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateFSMStatePayload">
                      <p4:FSMState>0</p4:FSMState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnableValveLeds</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateEnableValveLedsPayload">
                      <p4:EnableValveLeds>1</p4:EnableValveLeds>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMinimumPokeTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MinPokeTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MinimumPokeTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMinimumPokeTimeUSPayload">
                      <p4:MinimumPokeTimeUS>10000</p4:MinimumPokeTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMinimumOdorDeliveryTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MinOdorDeliveryTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MinOdorDeliveryTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMinOdorDeliveryTimeUSPayload">
                      <p4:MinOdorDeliveryTimeUS>10000</p4:MinOdorDeliveryTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetFinalValveEnergizedTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FinalValveEnergizedTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FinalValveEnergizedTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateFinalValveEnergizedTimeUSPayload">
                      <p4:FinalValveEnergizedTimeUS>110000</p4:FinalValveEnergizedTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetVacuumSetupTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VacuumSetupTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VacuumSetupTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateVacuumSetupTimeUSPayload">
                      <p4:VacuumSetupTimeUS>10000</p4:VacuumSetupTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetOdorTransitionTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OdorTransitionTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OdorTransitionTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateOdorTransitionTimeUSPayload">
                      <p4:OdorTransitionTimeUS>20000</p4:OdorTransitionTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetPokePin</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PokePin</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PokePin" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreatePokePinPayload">
                      <p4:PokePin>22</p4:PokePin>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetPokePinInverted</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreatePokePinInvertedPayload">
                      <p4:PokePinInverted>1</p4:PokePinInverted>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMaxOdorDeliveryTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MaxOdorDeliveryTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxOdorDeliveryTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMaxOdorDeliveryTimeUSPayload">
                      <p4:MaxOdorDeliveryTimeUS>10000000</p4:MaxOdorDeliveryTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerReady</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="InitiateFSM" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>InitiateFSM</rx:Name>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateFSMStatePayload">
                <p4:FSMState>1</p4:FSMState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="QueueOdor" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>QueueOdor</rx:Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="QueuedOdorIndex" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateQueuedOdorIndexPayload">
                <p4:QueuedOdorIndex>0</p4:QueuedOdorIndex>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StateController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>CurrentState</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerReady</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>DefaultState</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OdorIndex</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QueueOdor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>InitiateFSM</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DefaultState</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BeginState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>BeginState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SelectState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateDictionary</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Key" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TryLookupOrDefault">
                      <p2:DefaultState>DefaultState</p2:DefaultState>
                      <p2:Key>OdorA</p2:Key>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OdorIndex</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>QueueOdor</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DelphiEvents</Name>
                  </Expression>
                  <Expression xsi:type="p4:Parse">
                    <harp:Register xsi:type="p4:QueuedOdorIndex" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>OdorConsumed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:SByte">
                            <Value>-1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Default</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>DefaultState</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateForceFSMPayload">
                      <p4:ForceFSM>1</p4:ForceFSM>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TransitionState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Key" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TryLookupOrDefault">
                      <p2:DefaultState>DefaultState</p2:DefaultState>
                      <p2:Key>OdorA</p2:Key>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TransitionsTo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(it.Item1 as CurrentState, it.Item2 as TransitionState)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="27" Label="Source1" />
                  <Edge From="20" To="22" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TransitionState</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:UniformSampleStateProbabilities" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleWithoutReplacement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Rule.SampleWithReplacement</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:UpdateTransitionState" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TransitionState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleWithReplacement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Rule.SampleWithReplacement</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BeginState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="19" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="28" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="23" Label="Source1" />
            <Edge From="19" To="26" Label="Source2" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>StartCamera</rx:Name>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateCamPinPayload">
                <p4:CamPin>26</p4:CamPin>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.FrameRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateFrameRatePayload">
                <p4:FrameRate>60</p4:FrameRate>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.DutyCycle</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DutyCycle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateDutyCyclePayload">
                <p4:DutyCycle>0.5</p4:DutyCycle>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateEnableCamTriggerPayload">
                <p4:EnableCamTrigger>1</p4:EnableCamTrigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>StopCamera</rx:Name>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateEnableCamTriggerPayload">
                <p4:EnableCamTrigger>0</p4:EnableCamTrigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="p4:Parse">
              <harp:Register xsi:type="p4:TimestampedCamPinState" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>25294881</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <aeon:ExposureTime>10000</aeon:ExposureTime>
                <aeon:Gain>0</aeon:Gain>
                <aeon:Binning>1</aeon:Binning>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoFeed</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoggingRootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>DelphiEvents</LogName>
              <Heartbeats>DelphiEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>HardwareSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>RuleSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.FrameRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.FfmpegInput</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="InputArguments" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.FfmpegOutput</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OutputArguments" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.CameraName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LogName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogVideo.bonsai">
              <Heartbeats>DelphiEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
                <LogName>VideoData</LogName>
              <FrameRate>60</FrameRate>
              <OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M</OutputArguments>
              <InputArguments>-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear</InputArguments>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT1H</rx:Period>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Unit" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>StartRobocopy</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
                <rx:Name>StartRobocopy</rx:Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>Robocopy</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>HardwareSchema</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>LoggingRootPath</Selector>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>HardwareSchema</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>RemoteTransferRootPath</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="Format">
                      <Format>python\robocopy.py {0} {1}</Format>
                      <Selector>Item1,Item2</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Arguments" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="io:StartProcess">
                        <io:FileName>..\.python\.venv\Scripts\python.exe</io:FileName>
                        <io:Arguments>python\robocopy.py C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data_remote</io:Arguments>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="5" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source2" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="31" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="31" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="31" Label="Source3" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="31" Label="Source4" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source5" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartCamerasKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StartCamera</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StopCamerasKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StopCamera</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiEvents</Name>
      </Expression>
      <Expression xsi:type="p4:Parse">
        <harp:Register xsi:type="p4:QueuedOdorIndex" />
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiEvents</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFeed</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>3</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans>
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="3" RowSpan="1" />
        </viz:CellSpans>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="24" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="24" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="24" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source4" />
    </Edges>
  </Workflow>
</WorkflowBuilder>