<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:RuleSchema;assembly=Extensions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,sys:String)">
              <rx:Name>TransitionLookup</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:DelphiRule">
              <rx:Name>RuleSettings</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionSettingsPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:LoadSessionSettings">
                <p2:Path>DelphiSession.yml</p2:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LineMappings.Count</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MappingCount</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RuleSettingsPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:RuleSelector">
                <p2:Path>rule1.rule.yml</p2:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GenerateTransitionDictionary</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>StateDefinitions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>StateDefinitions.Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ToDictionary">
                    <rx:KeySelector>Name</rx:KeySelector>
                    <rx:ElementSelector>TransitionsTo</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TransitionLookup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LineMappings</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MappingCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Name</rx:KeySelector>
              <rx:ElementSelector>Line</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LineMappings</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>