<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:RuleSchema;assembly=Extensions"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>StateDefinitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>OdorState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="StateMessage" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OdorState</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="StateMessage" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>A</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Messages</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="StateName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>OdorA</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OdorState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="StateMessage" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OdorState</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="StateMessage" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>B</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Messages</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="StateName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>OdorB</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OdorState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="StateMessage" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OdorState</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="StateMessage" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>C</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Messages</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="StateName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>OdorC</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DefaultState.bonsai">
              <StateName>DefaultState</StateName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectDictionary</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>Messages</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>CurrentState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:DelphiRule">
        <rx:Name>RuleSettings</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,scg:List(sys:String))">
        <rx:Name>TransitionLookup</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,scg:List(sys:String))">
        <rx:Name>TransitionLookupState</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="RuleSettingsPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:RuleSelector">
          <p2:Path>rule1.rule.yml</p2:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>RuleSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RuleSettings</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GenerateTransitionDictionary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StateDefinitions</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StateDefinitions.Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Name</rx:KeySelector>
              <rx:ElementSelector>TransitionsTo</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TransitionLookup</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TransitionLookupState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Messages</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>BeginState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectDictionary</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>OdorC</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateComplete</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionLookupState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateComplete</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Key" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:TryGetValueOrDefault">
                <p2:Key>OdorC</p2:Key>
                <p2:DefaultString>DefaultState</p2:DefaultString>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as CurrentState, it.Item2 as TransitionState)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="18" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="17" To="22" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TransitionState</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:UniformSampleStateProbabilities" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>SampleWithoutReplacement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.SampleWithReplacement</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TransitionLookup</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TransitionLookupState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:UpdateTransitionState" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TransitionLookupState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Item1</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>SampleWithReplacement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.SampleWithReplacement</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>DefaultState</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="20" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="29" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="24" Label="Source1" />
      <Edge From="20" To="27" Label="Source2" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>